OpenViBE-Scenario
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  This scenario must be used to aquire the raw data to be used for training the CSP and LDA in later scenarios.

  This scenario has no feedback forthe user.
  Scenario setup talks 40 seconds before the instruction sequence begins playing.

  User will then be presented left / right arrows to imagine left / right movements.

  There will be 20 or 40 arrows of each side,
  total run time 8 or 16 minutes depending on number of cues.
  If number changed rememberto change to realtime also.
Comment
  Acquire data from acquisition server.
Comment
  Run the LUA script for the stimulation
Comment
  Close the scenario after finish trigger recieved
Comment
  Show the user a GUI
Comment
  Save the raw data and the associated stimulation codes

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Graz Motor Imagery BCI Stimulator => #1
  Lua Script = ${Player_ScenarioDirectory}/Graz_Stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#1 -> Identity => #2
#2.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Stimulations=#2.Output stream 3 -> Graz visualization
  Show instruction = true
  Show feedback = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/Acquisition2.ov
  Use compression = false
