OpenViBE-Scenario
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  This scenario should be used to Analyse the training in the previous scenarios or the Realtime.xml scenario. This scenario can be used to replay online sessions.

  The scenario displays the classification confusion matrix, along with the global performance evolving during the sessions.

  With this scenario, you can watch the performance of the classifier during time, and for each class.

  Load the Acquistion.xml or Realtime.xml data.
Comment
  Here we want to classify only during trials. This is achieved by
  a simple lua script and a stream switch.

  The Switch Director is a Lua scripting box
  that controls a Stream Switch box.
  When an instruction is received (OVTK_StimulationId_Right / Left)
  the switch director tells the stream switch to redirect
  its signal input to the first output (i.e. routed to a classifier).
  Otherwise, the feature input is redirected to the second output,
  i.e. nothing.
Comment
  The CSP Spatial Filter produced in the previous
  scenarios is used prior to the feature extraction.
Comment
  The signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.
Comment
  The Classifier Processor classifies
   everytime it receives a new feature vector.

  If we want an accurate performance computation,
  we need to classify only when the participant
  is actually doing the task, i.e.
  when an instruction (left or right) is received.
  This is achieved by the switch above.
Comment
  Finally, the feature vectors are classified with an LDA classifier.
  In Analysis.xml the state vector of the classifier is
  sent to the Graz Visualization box for feedback.

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other class.
Comment
  The Python Scripting box allows for the connection
   with the Arduino Serial Monitor
  and to send messages that will active the
   Arduino code for Prosthetic control.
Comment
  The Confusion Matrix computation needs
  the instruction flow, and the classification flow
  to compare them, for each class.

  As the instructions (OVTK_StimulationId_Left and _Right)
  are included in the stimulation stream, we need to filter
  away the other information in it with Stimulation Filter.

  Same goes for the Classifier Accuracy Measure that
  computes the global performance of the classifier.

Generic stream reader => #0
  Filename = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/signals/Acquisition2.ov
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#0.Output stream 2 -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
#0.Output stream 3 -> Switch director => #3
  Lua Script = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/Switch_Director.lua
  offset = 0.5
  duration = 4.0
Triggers=#3, Matrix=#2 -> Stream Switch => #4
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#4.Output[0] -> CSP Spatial Filter
  Spatial Filter Coefficients = 7.116948e-001 -1.064596e-001 -5.154275e-001 -5.533815e-002 -2.064186e-002 -2.733011e-002 -8.605365e-002 2.320767e-001 -1.474733e-001 1.380498e-001 -8.354069e-002 -3.018883e-001 -1.086432e-001 -1.631434e-002 1.946727e-001 -2.448385e-001 -5.969704e-001 5.915425e-001 -5.481186e-002 4.202521e-002 1.478603e-001 4.541449e-003 2.062201e-001 -2.822670e-001 -6.789747e-002 1.930619e-002 1.859524e-001 -8.627992e-002 -3.173702e-002 -1.381074e-001 -3.152077e-001 4.259980e-001 6.750883e-002 -9.725880e-002 1.350842e-002 -8.773279e-002 -2.209053e-001 4.221328e-001 -1.801554e-001 6.172755e-001 -9.289729e-002 -1.675785e-001 -9.851077e-003 6.193821e-001 -5.318158e-002 -7.804026e-003 -9.705997e-002 2.102440e-001 -1.820521e-001 -2.698261e-001 2.898637e-001 -8.924851e-002 3.252009e-001 -2.978105e-001 -4.091006e-001 -3.325781e-003 -1.017822e-002 9.960082e-002 6.302295e-002 -4.799380e-002 9.542814e-002 -4.565342e-001 7.323547e-001 -1.173622e-001 -2.523494e-001 1.410807e-001 1.066002e-001 -1.691566e-001 -3.036558e-001 -1.688234e-002 -2.815361e-001 2.750144e-001 1.717613e-001 1.472871e-002 -6.769255e-002 4.853437e-002 -1.594473e-001 6.843324e-001 -4.109963e-001 2.188315e-001 -3.087154e-001 3.370009e-002 2.070309e-002 3.223227e-002
  Number of Output Channels = 6
  Number of Input Channels = 14
  0x8d21ff41 = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/CSP_Spatial_Filter2.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #11
  Filename to load configuration from = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/LDA_Classify2.cfg
#11.Labels -> Python scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/MyOVBox.py
Input stream 2=#0.Output stream 3 -> Identity => #13
#13.Output stream 2 -> Stimulation Filter => #14
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Right
  Stimulation range end = OVTK_GDF_Right
Targets=#14, Classification results=#11.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#14, LDA=#11.Labels -> Accuracy Measure
Stimulations=#13.Output stream 2, Amplitude=#11.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
