OpenViBE-Scenario
Comment
  This scenario trains the Common Spatial Patter Spatial Filter that will be used in the further steps.

  Training can be done offline and speed increased using controls above.
Comment
  Load data from Acquisition.xml
Comment
  The EEG signal is filtered in a large
  frequency band [8-30 Hz]
Comment
  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  Class 1: Left Trials
  Class 2: Right Trials
Comment
  Train the CSP Spatial Filter
Comment
  End scenario when training has finished

Generic stream reader => #0
  Filename = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/signals/Acquisition2.ov
#0.Output stream 2 -> 0xc67a01dc Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Left Trials" => #3
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Right Trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#2.Output stream 2, Signal condition 1=#3.Epoched signal, Signal condition 2=#4.Epoched signal -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = ${Player_ScenarioDirectory}/CSP_Spatial_Filter2.cfg
  Filter dimension = 6
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
