OpenViBE-Scenario
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  This scenario should be used to train the LDA Classifier used to detect left / right hand movements.
  Load the Acquistion.xml data previously used and the CSP Spatial Filter.
  At the end of the training, an estimation of the classifier performance printed in the console.
  If this performance is lower than 65%, just run a new Acquisition.xml session to have better results.
Comment
  The EEG signal is filtered in a large
  frequency band [8-30 Hz]
Comment
  The CSP Spatial Filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then the Stimulation Based Epoching box
  is used to select four seconds of signal half a second
  after the instruction was shown to the user
  (OVTK_GDF_Left and OVTK_GDF_Right).
Comment
  The signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.
Comment
  The matrices can then be converted in feature vectors.
Comment
  The Classifier Trainer box produces a
  configuration file at the end of the experiment
  which will be used during online sessions.
Comment
  When finished player controller closes the scenario

Generic stream reader => #0
  Filename = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/signals/Acquisition2.ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> CSP Spatial Filter => #3
  Spatial Filter Coefficients = 7.116948e-001 -1.064596e-001 -5.154275e-001 -5.533815e-002 -2.064186e-002 -2.733011e-002 -8.605365e-002 2.320767e-001 -1.474733e-001 1.380498e-001 -8.354069e-002 -3.018883e-001 -1.086432e-001 -1.631434e-002 1.946727e-001 -2.448385e-001 -5.969704e-001 5.915425e-001 -5.481186e-002 4.202521e-002 1.478603e-001 4.541449e-003 2.062201e-001 -2.822670e-001 -6.789747e-002 1.930619e-002 1.859524e-001 -8.627992e-002 -3.173702e-002 -1.381074e-001 -3.152077e-001 4.259980e-001 6.750883e-002 -9.725880e-002 1.350842e-002 -8.773279e-002 -2.209053e-001 4.221328e-001 -1.801554e-001 6.172755e-001 -9.289729e-002 -1.675785e-001 -9.851077e-003 6.193821e-001 -5.318158e-002 -7.804026e-003 -9.705997e-002 2.102440e-001 -1.820521e-001 -2.698261e-001 2.898637e-001 -8.924851e-002 3.252009e-001 -2.978105e-001 -4.091006e-001 -3.325781e-003 -1.017822e-002 9.960082e-002 6.302295e-002 -4.799380e-002 9.542814e-002 -4.565342e-001 7.323547e-001 -1.173622e-001 -2.523494e-001 1.410807e-001 1.066002e-001 -1.691566e-001 -3.036558e-001 -1.688234e-002 -2.815361e-001 2.750144e-001 1.717613e-001 1.472871e-002 -6.769255e-002 4.853437e-002 -1.594473e-001 6.843324e-001 -4.109963e-001 2.188315e-001 -3.087154e-001 3.370009e-002 2.070309e-002 3.223227e-002
  Number of Output Channels = 6
  Number of Input Channels = 14
  0x8d21ff41 = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/CSP_Spatial_Filter2.cfg
Input signal=#3, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Left Trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
#4.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #9
Input signal=#3, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Right Trials" => #10
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
#10.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #15
Stimulations=#2.Output stream 2, Features for class 1=#9, Features for class 2=#15 -> 0xc67a01dc Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/LDA_Classify2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
