OpenViBE-Scenario
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  This scenario should be used after the CSP Spatial Filter and The LDA CLassifierfrom in the previous scenarios have been trained.
  This scenario is a real time fully working acquisition with visual feedback for the user.

  With this scenario, you can watch the blue bar feedback showing how well you perform for a direction in real time.
Comment
  The CSP Spatial Filter produced in the previous
  scenarios is used prior to the feature extraction.
Comment
  The signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.
Comment
  Finally, the feature vectors are classified with an LDA classifier.
  In Analysis.xml the state vector of the classifier is
  sent to the Graz Visualization box for feedback.

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other class.
Comment
  The Python Scripting box allows for the connection with the Arduino Serial Monitor
  and to send messages that will active the Arduino code for Prosthetic control.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Graz Motor Imagery BCI Stimulator => #2
  Lua Script = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/Graz_Stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/AcquisitionRT1.ov
  Use compression = false
Input stream 1=#1, Input stream 2=#2 -> Identity => #4
#4.Output stream 1 -> CSP Spatial Filter
  Spatial Filter Coefficients = 4.299466e-002 2.285412e-002 -3.398901e-002 2.316416e-002 2.446382e-002 -1.597403e-002 7.821497e-002 -1.171463e-001 1.259957e-001 1.271163e-001 -8.561795e-001 3.274200e-001 9.691622e-002 3.058912e-001 5.071769e-002 2.281870e-001 -9.586665e-002 6.863338e-002 -8.078640e-002 5.213694e-001 -6.385432e-002 5.529717e-001 -2.942745e-001 -1.973412e-001 5.047922e-002 4.430510e-001 -1.118193e-001 -7.976839e-002 -4.653808e-002 -1.944678e-002 3.143060e-001 2.033650e-002 -3.006328e-002 9.675098e-003 4.612292e-002 4.844646e-001 -7.312557e-002 -5.212006e-001 2.002895e-002 -6.031780e-001 -1.476472e-002 1.377798e-001 -1.613418e-001 -3.475372e-001 -1.779724e-001 8.492203e-001 -2.925936e-001 7.331893e-002 1.092307e-002 -1.865362e-002 1.202960e-002 -3.487865e-003 4.979482e-003 -8.673524e-002 8.410686e-003 3.328809e-002 -6.356259e-002 -4.794221e-001 -1.991940e-001 5.316269e-001 5.772565e-001 -8.817650e-002 -2.806812e-001 -6.178714e-002 -1.277078e-002 3.933941e-002 -5.224748e-005 -1.088618e-001 -7.634399e-002 -2.861915e-002 4.796107e-002 3.013251e-001 -5.303833e-002 -2.509226e-002 -1.174492e-001 1.607221e-001 -8.540926e-002 6.296888e-002 -9.554342e-002 3.340785e-001 -4.850966e-003 -7.465156e-002 -7.324339e-001 4.356395e-001
  Number of Output Channels = 6
  Number of Input Channels = 14
  0x8d21ff41 = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/CSP_Spatial_Filter2.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #11
  Filename to load configuration from = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/LDA_Classify2.cfg
#11.Labels -> 0xc67a01dc Python scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/Veritas/Desktop/OpenViBE Motor Imagery/MyOVBox.py
Stimulations=#2, Amplitude=#11.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
